PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'NAME': '"YOUR NAME"', 'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Image/0001_b30.jpg', 'Image/0002_b30.jpg', 'Image/0003_b20.jpg', 'Image/0004_b40.jpg', 'Image/0005_b15.jpg', 'Image/0006_b25.jpg', 'Image/0007_b20.jpg', 'Image/0008_b15.jpg', 'Image/0009_b30.jpg', 'Image/0010_b40.jpg', 'Image/0011_b40.jpg', 'Image/0012_b15.jpg', 'Image/0013_b25.jpg', 'Image/0014_b30.jpg', 'Image/0015_b40.jpg', 'Image/0016_b40.jpg', 'Image/0017_b25.jpg', 'Image/0018_b20.jpg', 'Image/0019_b10.jpg', 'Image/0020_b10.jpg', 'Image/0021_b20.jpg', 'Image/0022_b25.jpg', 'Image/0023_b20.jpg', 'Image/0024_b30.jpg', 'Image/0025_b40.jpg', 'Image/0026_b20.jpg', 'Image/0027_b20.jpg', 'Image/0028_b5.jpg', 'Image/0029_b20.jpg', 'Image/0030_b20.jpg', 'Image/0031_b25.jpg', 'Image/0032_b20.jpg', 'Image/0033_b30.jpg', 'Image/0034_b20.jpg', 'Image/0035_b20.jpg', 'Image/0036_b30.jpg', 'Image/0037_b25.jpg', 'Image/0038_b30.jpg', 'Image/0039_b30.jpg', 'Image/0040_b30.jpg', 'Image/0041_b20.jpg', 'Image/0042_b20.jpg', 'Image/0043_b35.jpg', 'Image/0044_b30.jpg', 'Image/0045_b20.jpg', 'Image/0046_b15.jpg', 'Image/0047_b20.jpg', 'Image/0048_b15.jpg', 'Image/0049_b40.jpg', 'Image/0050_b30.jpg', 'Image/0051_b20.jpg', 'Image/0052_b15.jpg', 'Image/0053_b30.jpg', 'Image/0054_15.jpg', 'Image/0055_b25.jpg', 'Image/0056_b30.jpg', 'Image/0057_b25.jpg', 'Image/0058_b20.jpg', 'Image/0059_b20.jpg', 'Image/0060_b30.jpg', 'Image/0061_b30.jpg', 'Image/0062_b20.jpg', 'Image/0063_b15.jpg', 'Image/0064_b30.jpg', 'Image/0065_b30.jpg', 'Image/0066_b30.jpg', 'Image/0067_b20.jpg', 'Image/0068_b20.jpg', 'Image/0069_b20.jpg', 'Image/0070_b15.jpg', 'Image/0071_b25.jpg', 'Image/0072_b20.jpg', 'Image/0073_b20.jpg', 'Image/0074_b30.jpg', 'Image/0075_b30.jpg', 'Image/0076_b30.jpg', 'Image/0077_b30.jpg', 'Image/0078_b20.jpg', 'Image/0079_b25.jpg', 'Image/0080_b25.jpg', 'Image/0081_b30.jpg', 'Image/0082_b20.jpg', 'Image/0083_b15.jpg', 'Image/0084_b20.jpg', 'Image/0085_b25.jpg', 'Image/0086_b20.jpg', 'Image/0087_b30.jpg', 'Image/0088_b30.jpg', 'Image/0089_b20.jpg', 'Image/0090_b25.jpg', 'Image/0091_b20.jpg', 'Image/0092_b20.jpg', 'Image/0093_b30.jpg', 'Image/0094_b20.jpg', 'Image/0095_b15.jpg', 'Image/0096_b35.jpg', 'Image/0097_b30.jpg', 'Image/0098_b30.jpg', 'Image/0099_b25.jpg', 'Image/0100_b30.jpg', 'Image/continue.jpeg', 'Image/start_icon.png', 'Image/training1.jpg', 'Image/training2.jpg', 'Image/0001_b30.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = cat_fox_final
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    TextboxComponent textbox
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.04
      saveStartStop = False
      size = (1.1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        本実験では、ぼやけた画像の確からしさを測定する課題を行います。

        事前に物体カテゴリーが提示され、その後ぼやけた画像が提示されるので、その物体カテゴリーが提示された画像のように見える確率を回答してください。

        準備ができたら2回練習を行います。スタートボタンをクリックして練習問題を始めてください。
    ImageComponent start_button
      image = Image/start_icon.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine training
    RoutineSettingsComponent training
      saveStartStop = False
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    TextboxComponent textbox_2
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.05
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $first_categ_tra+' ('+second_categ_tra+')が\n次に出てくる画像のように見える確率はどのくらい？'
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    ImageComponent image
      image [set every repeat] = $ 'Image/' + image_File_tra
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4
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    TextboxComponent textbox_3
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 8.0
      text [set every repeat] = $first_categ_tra+' ('+second_categ_tra+')が\n提示された画像のように見えた確率をマウスでクリック'
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 10
      labels = (0, 10, 20, 30, 40, 50, 60,70,80,90,100)
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 8.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60,70,80,90,100)
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    TextComponent text
      font = Hiragino Sans
      letterHeight = 0.05
      pos = (0.65, 0)
      saveStartStop = False
      startVal [time (s)] = 8.0
      text = [%]
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  Routine test_instruction
    RoutineSettingsComponent test_instruction
      saveStartStop = False
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    TextboxComponent textbox_4
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.04
      size = (1.1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        それでは実験を開始します。
        実験は203試行あります。

        準備ができたら、スタートボタンをクリックして実験を始めてください。
    ImageComponent start_button_2
      image = Image/start_icon.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = start_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test
    RoutineSettingsComponent test
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        n_trials=0
      Begin Routine:
        n_trials+=1
    TextboxComponent textbox_5
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.05
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $first_categ+' ('+second_categ+')が\n次に出てくる画像のように見える確率は？'
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    ImageComponent image_2
      image [set every repeat] = $ 'Image/' + image_File
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 4.0
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    TextboxComponent textbox_6
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      size = (1.3, 0.5)
      startVal [time (s)] = 8.0
      text [set every repeat] = $first_categ+' ('+second_categ+')が\n提示された画像のように見えた確率をマウスでクリック'
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 10
      labels = (0, 10, 20, 30, 40, 50, 60,70,80,90,100)
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 8.0
      storeRatingTime = False
      styles = rating
      ticks = (0, 10, 20, 30, 40, 50, 60,70,80,90,100)
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    TextComponent text_2
      font = Hiragino Sans
      letterHeight = 0.05
      pos = (0.65, 0)
      saveStartStop = False
      startVal [time (s)] = 8.0
      text = [%]
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    TextComponent number_of_trials
      font = Hiragino Sans
      letterHeight = 0.05
      pos = (0.6, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(n_trials)+'/'+'203'
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  Routine Thanks
    RoutineSettingsComponent Thanks
      saveStartStop = False
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    TextboxComponent textbox_7
      autoLog = False
      bold = False
      editable = False
      font = Hiragino Sans
      letterHeight = 0.05
      saveStartStop = False
      size = (1.1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        これで実験を終了します。
        ご協力ありがとうございます。
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment_con_train.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_File_tra': 'training1.jpg', 'first_categ_tra': '岩', 'second_categ_tra': 'rock'},
      {'image_File_tra': 'training2.jpg', 'first_categ_tra': '手袋', 'second_categ_tra': 'glove'}]
    Routine training
  LoopTerminator trials
  Routine test_instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = experiment_con.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image_File': '0001_b30.jpg', 'first_categ': '飛行機', 'second_categ': 'airplane'},
      {'image_File': '0001_b30.jpg', 'first_categ': '鳥', 'second_categ': 'bird'},
      {'image_File': '0002_b30.jpg', 'first_categ': 'イチゴ', 'second_categ': 'strawberry'},
      {'image_File': '0002_b30.jpg', 'first_categ': 'キノコ', 'second_categ': 'mushroom'},
      {'image_File': '0003_b20.jpg', 'first_categ': '鳥', 'second_categ': 'bird'},
      {'image_File': '0003_b20.jpg', 'first_categ': '飛行機', 'second_categ': 'airplane'},
      {'image_File': '0004_b40.jpg', 'first_categ': 'ブロッコリー', 'second_categ': 'broccoli'},
      {'image_File': '0004_b40.jpg', 'first_categ': '木', 'second_categ': 'tree'},
      {'image_File': '0005_b15.jpg', 'first_categ': '猫', 'second_categ': 'cat'},
      {'image_File': '0005_b15.jpg', 'first_categ': '犬', 'second_categ': 'dog'},
      {'image_File': '0006_b25.jpg', 'first_categ': '犬', 'second_categ': 'dog'},
      {'image_File': '0006_b25.jpg', 'first_categ': 'ライオン', 'second_categ': 'lion'},
      {'image_File': '0007_b20.jpg', 'first_categ': '犬', 'second_categ': 'dog'},
      {'image_File': '0007_b20.jpg', 'first_categ': 'ライオン', 'second_categ': 'lion'},
      {'image_File': '0008_b15.jpg', 'first_categ': '犬', 'second_categ': 'dog'},
      {'image_File': '0008_b15.jpg', 'first_categ': '羊', 'second_categ': 'sheep'},
      {'image_File': '0009_b30.jpg', 'first_categ': 'ゾウ', 'second_categ': 'elephant'},
      {'image_File': '0009_b30.jpg', 'first_categ': '岩', 'second_categ': 'rock'},
      {'image_File': '0010_b40.jpg', 'first_categ': '魚', 'second_categ': 'fish'}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
    Routine test
  LoopTerminator trials_2
  Routine Thanks
